CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:25
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['***Click "Apply filters" before each run.***', 'The rules exclude directories and filenames starting with dots. ', '', 'The input images should be denoised and raw max projections.  Denoised images should include "Denoised" in the file name.', '']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
    Filter images?:Custom
    Select the rule criteria:and (file doesnot startwith ".") (directory doesnot containregexp "[\\\\/]\\.")

Metadata:[module_num:2|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notes:['***Click "Update" before each run.***', 'If the files are named consistently, the rules here will extract the sample, treatment, and field number from the file name of the raw images. ', 'The denoised images are ignored here.', 'Names MUST start with the pattern:', 'samplename_treatment_XXX where XXX is a 3-digit number identifying the field of view.']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Sample>.*)_(?P<Treatment>[a-zA-Z]*)_(?P<Field>[0-9]{3})
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file doesnot contain "Denoised")
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
NamesAndTypes:[module_num:3|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notes:['***Click "Update" before each run.***', 'The raw and denoised images are paired up by alphabetical order. So they must be named consistently.']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "Denoised")
    Name to assign these images:OrigDenoised
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    Select the image type:Color image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file doesnot contain "Denoised")
    Name to assign these images:OrigRaw
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    Select the image type:Color image
    Set intensity range from:Image bit-depth
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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notes:['Split the original images into their component channels']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
    Select the input image:OrigRaw
    Conversion method:Split
    Image type:Channels
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    Channel count:4
    Channel number:1
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    Image name:DAPI
    Channel number:2
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    Image name:PDGFRalpha
    Channel number:3
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    Image name:SMA
    Channel number:4
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    Image name:Vimentin

ColorToGray:[module_num:6|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notes:['Split the denoised images into their component channels']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
    Select the input image:OrigDenoised
    Conversion method:Split
    Image type:Channels
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    Channel count:4
    Channel number:1
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    Image name:DAPIDenoised
    Channel number:2
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    Image name:PDGFRalphaDenoised
    Channel number:3
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    Image name:SMADenoised
    Channel number:4
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    Image name:VimentinDenoised

ImageMath:[module_num:7|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notes:['Generate an image to define the cytoplasm area, by adding PDGFR + SMA + 3x Vimentin (vimentin should be unchanged by the experimental treatment) ']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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:SumOfChannels
    Image or measurement?:Image
    Select the first image:VimentinDenoised
    Multiply the first image by:3
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    Image or measurement?:Image
    Select the second image:SMADenoised
    Multiply the second image by:1.0
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    Image or measurement?:Image
    Select the third image:PDGFRalphaDenoised
    Multiply the third image by:1.0
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
EnhanceOrSuppressFeatures:[module_num:8|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
    Select the input image:DAPIDenoised
    Name the output image:EnhanceOrSuppressFeatures
    Select the operation:Suppress
    Feature size:15
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
IdentifyPrimaryObjects:[module_num:9|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notes:['Identify nuclei using denoised DAPI.']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
    Select the input image:EnhanceOrSuppressFeatures
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):35,120
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.5
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.004,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifySecondaryObjects:[module_num:10|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notes:['Identify a limited cytoplasm area based on the nuclei and a distance (100 pixels, 30 µm) plus the sum image intensity. ']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
    Select the input objects:Nuclei
    Name the objects to be identified:CellCenters
    Select the method to identify the secondary objects:Distance - B
    Select the input image:SumOfChannels
    Number of pixels by which to expand the primary objects:100
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:3
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.005,0.5
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    Log transform before thresholding?:Yes
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
IdentifyTertiaryObjects:[module_num:11|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notes:['Identify a "donut" corresponding to an area of cytoplasm, excluding the nucleus']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
    Select the larger identified objects:CellCenters
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:CytoplasmCenters
    Shrink smaller object prior to subtraction?:No

MeasureObjectIntensity:[module_num:12|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notes:['Measure the PDGFR, SMA, and vimentin intensity in the defined cell and cytoplasm areas, using the raw (non-denoised) images.']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
    Select images to measure:PDGFRalpha, SMA, Vimentin
    Select objects to measure:CellCenters, CytoplasmCenters

GrayToColor:[module_num:13|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notes:['Generate a color overlay for display purposes.']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
    Select a color scheme:Composite
    Rescale intensity:Yes
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    Name the output image:ColorSMAImage
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    Hidden:3
    Image name:DAPIDenoised
    Color:#0000FF
    Weight:1.0
    Image name:SMA
    Color:#FF0000
    Weight:1.5
    Image name:VimentinDenoised
    Color:#FFFFFF
    Weight:1

GrayToColor:[module_num:14|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
    Select a color scheme:Composite
    Rescale intensity:Yes
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    Name the output image:ColorPDGFRImage
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    Hidden:3
    Image name:DAPIDenoised
    Color:#0000FF
    Weight:1.0
    Image name:PDGFRalpha
    Color:#00ff00
    Weight:1.5
    Image name:VimentinDenoised
    Color:#FFFFFF
    Weight:1

GrayToColor:[module_num:15|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
    Select a color scheme:Composite
    Rescale intensity:Yes
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    Name the output image:ColorVimentinImage
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    Hidden:2
    Image name:DAPIDenoised
    Color:#0000FF
    Weight:1.0
    Image name:Vimentin
    Color:#FFFFFF
    Weight:1.5

OverlayOutlines:[module_num:16|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notes:['Overlay the cell centers and nuclei on the color image']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ColorPDGFRImage
    Name the output image:OutlinePDGFROverlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#FF0000
    Select objects to display:Nuclei
    Select outline color:#FFFF00
    Select objects to display:CellCenters

OverlayOutlines:[module_num:17|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ColorSMAImage
    Name the output image:OutlineSMAOverlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#FF0000
    Select objects to display:Nuclei
    Select outline color:#FFFF00
    Select objects to display:CellCenters

OverlayOutlines:[module_num:18|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ColorVimentinImage
    Name the output image:OutlineVimentinOverlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#FF0000
    Select objects to display:Nuclei
    Select outline color:#FFFF00
    Select objects to display:CellCenters

DisplayDataOnImage:[module_num:19|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notes:['Output an image with the PDGFR intensity overlaid']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
    Display object or image measurements?:Object
    Select the input objects:CytoplasmCenters
    Measurement to display:Intensity_MeanIntensity_PDGFRalpha
    Select the image on which to display the measurements:OutlinePDGFROverlay
    Text color:#FFFFFF
    Name the output image that has the measurements displayed:PDGFR_Overlay
    Font size (points):16
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:.Aqua Kana
    Use scientific notation?:Yes
    Font weight:bold

DisplayDataOnImage:[module_num:20|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notes:['Output an image with the SMA intensity overlaid']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
    Display object or image measurements?:Object
    Select the input objects:CytoplasmCenters
    Measurement to display:Intensity_MeanIntensity_SMA
    Select the image on which to display the measurements:OutlineSMAOverlay
    Text color:#FFFFFF
    Name the output image that has the measurements displayed:SMA_Overlay
    Font size (points):16
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:.Aqua Kana
    Use scientific notation?:Yes
    Font weight:bold

DisplayDataOnImage:[module_num:21|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notes:['Output an image with the vimentin intensity overlaid']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
    Display object or image measurements?:Object
    Select the input objects:CytoplasmCenters
    Measurement to display:Intensity_MeanIntensity_Vimentin
    Select the image on which to display the measurements:OutlineVimentinOverlay
    Text color:#FFFFFF
    Name the output image that has the measurements displayed:Vimentin_Overlay
    Font size (points):16
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:.Aqua Kana
    Use scientific notation?:Yes
    Font weight:bold

SaveImages:[module_num:22|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notes:['Save the PDGFR overlay image']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
    Select the type of image to save:Image
    Select the image to save:PDGFR_Overlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigRaw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_PDGFR_overlay
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:23|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notes:['Save the SMA overlay image']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
    Select the type of image to save:Image
    Select the image to save:SMA_Overlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigRaw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_SMA_overlay
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:24|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notes:['Save the vimentin overlay image']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
    Select the type of image to save:Image
    Select the image to save:Vimentin_Overlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigRaw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_vim_overlay
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:25|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notes:['Export data including metadata and file names']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:
    Overwrite existing files without warning?:No
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